PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = English1-LDT
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instructions2Disp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see real words and fake words.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine complete
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    TextComponent completeMessage
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        You have finished the experiment!
  Routine fixation
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    TextComponent fixationDisp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text = +
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  Routine prFixation
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    TextComponent prFixationDisp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text = +
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  Routine prPrime
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    TextComponent prPrimeDisp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $prime
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  Routine prTarget
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    TextComponent prTargetDisp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $target
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    KeyboardComponent prResponse
      allowedKeys = 'j','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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  Routine ready
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    TextComponent readyDisp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice is done.

        Press the SPACEBAR to begin the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        On each trial you will see some characters, and a moment later you will see some more characters.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions3
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your job is to ignore the FIRST set of characters, and judge the SECOND set of characters.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions4
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press J if the second set of characters you see is a real word in Mandarin, or

        Press F if it is NOT a real word.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions5
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    TextComponent text_4
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For example, if you see MONKEY and then CHAIR, press J because CHAIR is a real word.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine expTarget
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    TextComponent targetDisp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $target
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    KeyboardComponent response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      store = first key
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  Routine instructions6
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        If you see WALL and then BLICK, press F because BLICK is not a real word.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions7
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    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Try to answer as fast as you can, but without making mistakes.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine instructions8
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    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE BAR to start the practice.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine expPrime
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    TextComponent primeDisp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $prime
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Flow
  Routine instructions
  Routine instructions2
  Routine instructions3
  Routine instructions4
  Routine instructions5
  Routine instructions6
  Routine instructions7
  Routine instructions8
  LoopInitiator prTrials loopType="TrialHandler"
    conditionsFile = EnglishPractice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'schoolwork', 'target': 'images/FH01.bmp', 'condition': 'wrd'},
      {'prime': 'celebration', 'target': 'images/FH02.bmp', 'condition': 'non'},
      {'prime': 'effect', 'target': 'images/FH03.bmp', 'condition': 'wrd'},
      {'prime': 'memorize', 'target': 'images/FH04.bmp', 'condition': 'wrd'},
      {'prime': 'conference', 'target': 'images/FH05.bmp', 'condition': 'non'},
      {'prime': 'outside', 'target': 'images/FH06.bmp', 'condition': 'non'},
      {'prime': 'rent', 'target': 'images/FH07.bmp', 'condition': 'non'},
      {'prime': 'town', 'target': 'images/FH08.bmp', 'condition': 'wrd'},
      {'prime': 'elephant', 'target': 'images/FH09.bmp', 'condition': 'non'}]
    Routine prFixation
    Routine prPrime
    Routine prTarget
  LoopTerminator prTrials
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = English1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'naughty', 'target': 'mischief ', 'condition': 101},
      {'prime': 'prejudice', 'target': 'discrimination ', 'condition': 103},
      {'prime': 'math', 'target': 'equation', 'condition': 105},
      {'prime': 'cheap', 'target': 'price ', 'condition': 107},
      {'prime': 'spoiled', 'target': 'pampered ', 'condition': 109},
      {'prime': 'countryside', 'target': 'county seat ', 'condition': 111},
      {'prime': 'butterfly', 'target': 'bee ', 'condition': 113},
      {'prime': 'explanation', 'target': 'furniture ', 'condition': 202},
      {'prime': 'prejudice', 'target': 'hero ', 'condition': 204},
      {'prime': 'math', 'target': 'guard ', 'condition': 206},
      {'prime': 'interest', 'target': 'operate ', 'condition': 208},
      {'prime': 'spoil', 'target': 'tale ', 'condition': 210},
      {'prime': 'countryside', 'target': 'vision ', 'condition': 212},
      {'prime': 'butterfly', 'target': 'author ', 'condition': 214},
      {'prime': 'curse', 'target': 'vo ', 'condition': 301},
      {'prime': 'towel', 'target': 'gelogote ', 'condition': 302},
      {'prime': 'consciousness', 'target': 'sugby ', 'condition': 303},
      {'prime': 'court', 'target': 'kears ', 'condition': 304},
      {'prime': 'still', 'target': 'tonsamer ', 'condition': 305},
      {'prime': 'method', 'target': 'beduted ', 'condition': 306},
      {'prime': 'realize', 'target': 'oss ', 'condition': 307},
      {'prime': 'benefit', 'target': 'ummifent ', 'condition': 315},
      {'prime': 'music', 'target': 'dapours ', 'condition': 316},
      {'prime': 'border', 'target': 'ipent ', 'condition': 317},
      {'prime': 'pack', 'target': 'opersime ', 'condition': 318}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
    Routine fixation
    Routine expPrime
    Routine expTarget
  LoopTerminator trials
  Routine complete
