PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = Jiantizi1-LDT
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instructions
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    TextComponent instructions2Disp
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see real words and fake words.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine complete
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    TextComponent completeMessage
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        You have finished the experiment!
  Routine fixation
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    TextComponent fixationDisp
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text = +
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  Routine prFixation
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    TextComponent prFixationDisp
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text = +
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  Routine prPrime
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    TextComponent prPrimeDisp
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $prime
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  Routine prTarget
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    TextComponent prTargetDisp
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $target
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    KeyboardComponent prResponse
      allowedKeys = 'j','f'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = first key
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  Routine ready
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    TextComponent readyDisp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice is done.

        Press the SPACEBAR to begin the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2
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    TextComponent text
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial you will see some characters, and a moment later you will see some more characters.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions3
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    TextComponent text_2
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Your job is to ignore the first set of characters, and judge the second set of characters.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions4
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    TextComponent text_3
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press J if the second set of characters you see is a real word in Chinese,

        Press F if it is not a real word.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions5
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    TextComponent text_4
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        For example, if you see 米島and then 信封, press J because 信封 is a real word.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expTarget
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    TextComponent targetDisp
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $target
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    KeyboardComponent response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      store = first key
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  Routine instructions6
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    TextComponent text_5
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you see 桂花 and then 屏杯, press F because 屏杯 is not a real word.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions7
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    TextComponent text_6
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Try to answer as fast as you can, but without making mistakes.

        (Press SPACE to read the next page of instructions.)
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions8
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    TextComponent text_7
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press SPACE BAR to start the practice.
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine expPrime
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    TextComponent primeDisp
      font = Heiti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $prime
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Flow
  Routine instructions
  Routine instructions2
  Routine instructions3
  Routine instructions4
  Routine instructions5
  Routine instructions6
  Routine instructions7
  Routine instructions8
  LoopInitiator prTrials loopType="TrialHandler"
    conditionsFile = Fanti1Practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': '廣告', 'target': '我們', 'condition': 'practice'},
      {'prime': '學業', 'target': '梳子', 'condition': 'practice'},
      {'prime': '慶典', 'target': '糖雨', 'condition': 'practice'},
      {'prime': '效果', 'target': '國家', 'condition': 'practice'},
      {'prime': '背負', 'target': '單詞', 'condition': 'practice'},
      {'prime': '大會', 'target': '塗北', 'condition': 'practice'},
      {'prime': '外界', 'target': '土背', 'condition': 'practice'},
      {'prime': '房租', 'target': '米寶', 'condition': 'practice'},
      {'prime': '小鎮', 'target': '葡萄', 'condition': 'practice'}]
    Routine prFixation
    Routine prPrime
    Routine prTarget
  LoopTerminator prTrials
  Routine ready
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Fanti1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': '頑皮', 'target': '搗蛋', 'condition': 'A'},
      {'prime': '偏見', 'target': '歧視', 'condition': 'A'},
      {'prime': '數學', 'target': '公式', 'condition': 'A'},
      {'prime': '便宜', 'target': '優惠', 'condition': 'A'},
      {'prime': '溺愛', 'target': '嬌慣', 'condition': 'A'},
      {'prime': '農村', 'target': '縣城', 'condition': 'A'},
      {'prime': '蝴蝶', 'target': '蜜蜂', 'condition': 'A'},
      {'prime': '註明', 'target': '傢具', 'condition': 'A'},
      {'prime': '偏見', 'target': '烈士', 'condition': 'A'},
      {'prime': '數學', 'target': '守衛', 'condition': 'A'},
      {'prime': '興緻', 'target': '經營', 'condition': 'A'},
      {'prime': '溺愛', 'target': '童話', 'condition': 'A'},
      {'prime': '農村', 'target': '視力', 'condition': 'A'},
      {'prime': '蝴蝶', 'target': '原著', 'condition': 'A'},
      {'prime': '謠言', 'target': '易小', 'condition': 'nonword'},
      {'prime': '毛巾', 'target': '德被', 'condition': 'nonword'},
      {'prime': '意識', 'target': '范尼', 'condition': 'nonword'},
      {'prime': '法院', 'target': '事卻', 'condition': 'nonword'},
      {'prime': '靜止', 'target': '積五', 'condition': 'nonword'},
      {'prime': '辦法', 'target': '私字', 'condition': 'nonword'},
      {'prime': '實現', 'target': '敘以', 'condition': 'nonword'},
      {'prime': '利益', 'target': '甘受', 'condition': 'nonword'},
      {'prime': '音樂', 'target': '受甘', 'condition': 'nonword'},
      {'prime': '邊界', 'target': '在鼎', 'condition': 'nonword'},
      {'prime': '收拾', 'target': '對罵', 'condition': 'nonword'},
      {'prime': '認識', 'target': '秀李', 'condition': 'nonword'},
      {'prime': '出發', 'target': '售只', 'condition': 'nonword'},
      {'prime': '市場', 'target': '似干', 'condition': 'nonword'}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
    Routine fixation
    Routine expPrime
    Routine expTarget
  LoopTerminator trials
  Routine complete
